CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:95
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:12
    Single images count:0
    Select the rule criteria:and (file does contain "One")
    Name to assign these images:One
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Two")
    Name to assign these images:Two
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Three")
    Name to assign these images:Three
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Four")
    Name to assign these images:Four
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Five")
    Name to assign these images:Five
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Six")
    Name to assign these images:Six
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Seven")
    Name to assign these images:Seven
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Eight")
    Name to assign these images:Eight
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nine")
    Name to assign these images:Nine
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ten")
    Name to assign these images:Ten
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Eleven")
    Name to assign these images:Eleven
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Twelve")
    Name to assign these images:Twelve
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyObjectsManually:[module_num:5|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
    Select the input image:One
    Name the objects to be identified:OneObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:6|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
    Select the input image:Two
    Name the objects to be identified:TwoObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:7|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
    Select the input image:Three
    Name the objects to be identified:ThreeObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:8|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
    Select the input image:Four
    Name the objects to be identified:FourObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:9|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
    Select the input image:Five
    Name the objects to be identified:FiveObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:10|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
    Select the input image:Six
    Name the objects to be identified:SixObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:11|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
    Select the input image:Seven
    Name the objects to be identified:SevenObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:12|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
    Select the input image:Eight
    Name the objects to be identified:EightObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:13|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
    Select the input image:Nine
    Name the objects to be identified:NineObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:14|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
    Select the input image:Ten
    Name the objects to be identified:TenObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:15|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
    Select the input image:Eleven
    Name the objects to be identified:ElevenObject
    Retain outlines of the identified objects?:No
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
IdentifyObjectsManually:[module_num:16|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
    Select the input image:Twelve
    Name the objects to be identified:TwelveObject
    Retain outlines of the identified objects?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:One
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal1
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:18|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
    Select the input objects:OneObject
    Name the output image:OneImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:19|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
    Select the input objects:TwoObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:20|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
    Select the input image:Two
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:21|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:TwoAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:22|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal2
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_TwoAligned,Image|Align_Yshift_TwoAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image2.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:25|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:26|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
    Select the input objects:ThreeObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:27|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
    Select the input image:Three
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:28|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:ThreeAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:29|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal3
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:31|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_ThreeAligned,Image|Align_Yshift_ThreeAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image3.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:32|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:33|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
    Select the input objects:FourObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:34|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
    Select the input image:Four
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:35|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:FourAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:36|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal4
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:38|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_FourAligned,Image|Align_Yshift_FourAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image4.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:39|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:40|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
    Select the input objects:FiveObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:41|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
    Select the input image:Five
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:42|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:FiveAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:43|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal5
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:45|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_FiveAligned,Image|Align_Yshift_FiveAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image5.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:46|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:47|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
    Select the input objects:SixObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:48|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
    Select the input image:Six
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:49|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:SixAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:50|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal6
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:52|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_SixAligned,Image|Align_Yshift_SixAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image6.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:53|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:54|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
    Select the input objects:SevenObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:55|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
    Select the input image:Seven
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:56|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:SevenAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:57|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:58|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal7
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:59|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_SevenAligned,Image|Align_Yshift_SevenAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image7.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:60|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:61|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
    Select the input objects:EightObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:62|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
    Select the input image:Eight
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:63|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:EightAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:64|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:65|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal8
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:66|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_EightAligned,Image|Align_Yshift_EightAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image8.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:67|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:68|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
    Select the input objects:NineObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:69|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
    Select the input image:Nine
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:70|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:NineAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:71|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:72|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal9
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:73|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_NineAligned,Image|Align_Yshift_NineAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image9.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:74|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:75|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
    Select the input objects:TenObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:76|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
    Select the input image:Ten
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:77|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:TenAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:78|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:79|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal10
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:80|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_TenAligned,Image|Align_Yshift_TenAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image10.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:81|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:82|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
    Select the input objects:ElevenObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:83|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
    Select the input image:Eleven
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:84|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:ElevenAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:85|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:86|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal11
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:87|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_ElevenAligned,Image|Align_Yshift_ElevenAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image11.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:88|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two

ConvertObjectsToImage:[module_num:89|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
    Select the input objects:TwelveObject
    Name the output image:TwoImage
    Select the color format:Binary (black & white)
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
ColorToGray:[module_num:90|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
    Select the input image:Twelve
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TwoOrigRed
    Convert green to gray?:Yes
    Name the output image:TwoOrigGreen
    Convert blue to gray?:Yes
    Name the output image:TwoOrigBlue
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
Align:[module_num:91|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:OneImage
    Name the first output image:OneAligned
    Select the second input image:TwoImage
    Name the second output image:TwelveAligned
    Select the additional image:TwoOrigBlue
    Name the output image:TwoAlignedBlue
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigGreen
    Name the output image:TwoAlignedGreen
    Select how the alignment is to be applied:Similarly
    Select the additional image:TwoOrigRed
    Name the output image:TwoAlignedRed
    Select how the alignment is to be applied:Similarly

GrayToColor:[module_num:92|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
    Select a color scheme:RGB
    Select the image to be colored red:TwoAlignedRed
    Select the image to be colored green:TwoAlignedGreen
    Select the image to be colored blue:TwoAlignedBlue
    Name the output image:TwoAlignedFinal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:93|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
    Select the type of image to save:Image
    Select the image to save:TwoAlignedFinal
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    Select method for constructing file names:Single name
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    Enter single file name:AlignedFinal12
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Pictures\\\\\\\\CP
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:94|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Align_Xshift_TwelveAligned,Image|Align_Yshift_TwelveAligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image12.csv
    Use the object name for the file name?:No

ConserveMemory:[module_num:95|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
    Specify which images?:Images to remove
    Select image to remove:TwoAligned
    Select image to remove:TwoAlignedFinal
    Select image to remove:TwoAlignedBlue
    Select image to remove:TwoAlignedGreen
    Select image to remove:TwoAlignedRed
    Select image to remove:TwoImage
    Select image to remove:TwoOrigGreen
    Select image to remove:TwoOrigRed
    Select image to remove:TwoOrigBlue
    Select image to remove:Two
