CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:12
    Single images count:0
    Select the rule criteria:and (file does contain "One")
    Name to assign these images:DNA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Two")
    Name to assign these images:Two
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Three")
    Name to assign these images:Three
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Four")
    Name to assign these images:Four
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Five")
    Name to assign these images:Five
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Six")
    Name to assign these images:Six
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Seven")
    Name to assign these images:Seven
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Eight")
    Name to assign these images:Eight
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nine")
    Name to assign these images:Nine
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ten")
    Name to assign these images:Ten
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Eleven")
    Name to assign these images:Eleven
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Twelve")
    Name to assign these images:Twelve
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
UnmixColors:[module_num:6|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
    Stain count:1
    Select the input color image:Two
    Name the output name:Unmix2
    Stain:AEC
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
UnmixColors:[module_num:7|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
    Stain count:1
    Select the input color image:Three
    Name the output name:Unmix3
    Stain:AEC
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
UnmixColors:[module_num:8|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
    Stain count:1
    Select the input color image:Four
    Name the output name:Unmix4
    Stain:AEC
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
UnmixColors:[module_num:9|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
    Stain count:1
    Select the input color image:Five
    Name the output name:Unmix5
    Stain:AEC
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
UnmixColors:[module_num:10|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
    Stain count:1
    Select the input color image:Six
    Name the output name:Unmix6
    Stain:AEC
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
UnmixColors:[module_num:11|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
    Stain count:1
    Select the input color image:Seven
    Name the output name:Unmix7
    Stain:AEC
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
UnmixColors:[module_num:12|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
    Stain count:1
    Select the input color image:Eight
    Name the output name:Unmix8
    Stain:AEC
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
UnmixColors:[module_num:13|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
    Stain count:1
    Select the input color image:Nine
    Name the output name:Unmix9
    Stain:AEC
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
UnmixColors:[module_num:14|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
    Stain count:1
    Select the input color image:Ten
    Name the output name:Unmix10
    Stain:AEC
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
UnmixColors:[module_num:15|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
    Stain count:1
    Select the input color image:Eleven
    Name the output name:Unmix11
    Stain:AEC
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
UnmixColors:[module_num:16|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
    Stain count:1
    Select the input color image:Twelve
    Name the output name:Unmix12
    Stain:AEC
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
Morph:[module_num:17|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
    Select the input image:OrigRed
    Name the output image:MorphGreen
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:MorphGreen
    Name the primary objects to be identified:NucleiGreen
    Typical diameter of objects, in pixel units (Min,Max):9,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectIntensity:[module_num:19|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
    Hidden:12
    Select an image to measure:Unmix2
    Select an image to measure:Unmix3
    Select an image to measure:Unmix4
    Select an image to measure:Unmix5
    Select an image to measure:Unmix6
    Select an image to measure:Unmix7
    Select an image to measure:Unmix8
    Select an image to measure:Unmix9
    Select an image to measure:Unmix10
    Select an image to measure:Unmix11
    Select an image to measure:Unmix12
    Select an image to measure:MorphGreen
    Select objects to measure:NucleiGreen

MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:NucleiGreen
    Calculate the Zernike features?:Yes

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:NucleiGreen
    Name the output image:NucleiGreen
    Select the color format:uint16
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:NucleiGreen
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    Select method for constructing file names:Single name
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    Enter single file name:Temp-
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    Saved file format:tif
    Output file location:Default Output Folder|Desktop\\\\\\\\CellProfiler\\\\\\\\Takahiro\\\\\\\\Cases\\\\\\\\3\\\\\\\\Extracted1
    Image bit depth:16
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\\\\\\\CellProfiler\\\\\\\\Takahiro\\\\\\\\Cases\\\\\\\\3\\\\\\\\Extracted1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.cptoc
    Use the object name for the file name?:No
    Data to export:NucleiGreen
    Combine these object measurements with those of the previous object?:No
    File name:NucleiGreen.cpout
    Use the object name for the file name?:No
